<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>282</cv:X>
            <cv:Y>152</cv:Y>
            <cv:Width>188</cv:Width>
            <cv:Height>138</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>92</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:CreateArduino">
            <ard:BaudRate>9600</ard:BaudRate>
            <ard:SamplingInterval>19</ard:SamplingInterval>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:AnalogInput">
            <ard:Pin>0</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dsp:Rescale">
            <dsp:Min>0</dsp:Min>
            <dsp:Max>1023</dsp:Max>
            <dsp:RangeMin>0</dsp:RangeMin>
            <dsp:RangeMax>255</dsp:RangeMax>
            <dsp:RescaleType>Linear</dsp:RescaleType>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ard:AnalogOutput">
            <ard:Pin>10</ard:Pin>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT2M</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>OptoOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>100</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWriteLine">
                <port:PortName>COM11</port:PortName>
                <port:NewLine>/r/n</port:NewLine>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>